PsychoPy2experiment version="2020.1.1"
Settings
  Audio lib = ptb
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'age': '', 'gender': 'F'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  color = black
  expName = three_arm_bandit_rating_kb_block
  logging level = warning
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Routines
  Routine rating_instruct
    TextComponent instr1_2
      durationEstim = 10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Well done!


        Next task is to rate the value of each option based on your experience.

        Please press the right and left arrows to move the rating bar and press the down arrow to confirm your choice.


        Press any key to continue
    KeyboardComponent ready1_2
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ITI
    ImageComponent iti_fixation
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine end
    TextComponent end_msg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks for your participation
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    CodeComponent end_code
      Code Type = Auto->JS
      End Experiment:
        thisExp.saveAsWideText(filename+'.tsv')
  Routine rating2
    ImageComponent option_rating2
      durationEstim = 10
      image [set every repeat] = $rating_pic2
      opacity [set every repeat] = $with_rating
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    RatingScaleComponent rating_bar2
      durationEstim = 10
      forceEndRoutine = True
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=2,
        markerStart=5,
        labels = ('0','50','100'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
    CodeComponent rating_code_2
      Code Type = Py
      Begin Routine:
        # skip it if no rating is needed
        if with_rating == 0:
            continueRoutine = False
      End Routine:
        if with_rating == 1:
            thisExp.addData('rt_score2',rating_bar2.getRating()*10)
        else:
            thisExp.addData('rt_score2',no_resp)
    TextComponent reminder_rating2
      durationEstim = 5
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      text = Please press 'return' key to confirm your choice
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  Routine rating3
    ImageComponent option_rating3
      durationEstim = 10
      image [set every repeat] = $rating_pic3
      opacity [set every repeat] = $with_rating
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    RatingScaleComponent rating_bar3
      durationEstim = 10
      forceEndRoutine = True
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=2,
        markerStart=5,
        labels = ('0','50','100'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
    CodeComponent rating_code_3
      Code Type = Py
      Begin Routine:
        # skip it if no rating is needed
        if with_rating == 0:
            continueRoutine = False
      End Routine:
        if with_rating == 1:
            thisExp.addData('rt_score3',rating_bar3.getRating()*10)
        else:
            thisExp.addData('rt_score3',no_resp)
    TextComponent reminder_rating3
      durationEstim = 10
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      text = Please press 'return' key to confirm your choice
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  Routine rating_ITI
    ImageComponent rating_fixation
      durationEstim = 0.5
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt_fix_durat
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  Routine test_instr
    KeyboardComponent instr_resp
      allowedKeys = 'right'
      durationEstim = 60
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_order_code
      Code Type = Auto->JS
      Begin Routine:
        # determine the order of tasks by parity of the participant id
        participant_id = expInfo['participant']
        # turn it into integer
        participant_id = int(participant_id)
        if participant_id % 2 ==0:
            task_order = '1'
        else:
            task_order = '2'
    TextComponent test_instr_txt
      durationEstim = 60
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Test starts

        Rules are the same as the last practice session.

        You would be shown free choices, forced choices, or ratings,
        but different stimuli will be used

        Press <right> to continue
  Routine break_bt_sess
    TextComponent break_text
      durationEstim = 60
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Good work!

        Now you have 1 min a brief break.

        Please press 'right' to continue if you are ready.
    KeyboardComponent break_resp
      allowedKeys = 'right'
      durationEstim = 60
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip it for the 1st session
        if with_block_break == 0:
            continueRoutine = False
  Routine new_instr
    KeyboardComponent new_instr_resp
      allowedKeys = 'right'
      durationEstim = 60
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent new_instr_code
      Code Type = Auto->JS
      Begin Routine:
        # present it only when task changes
        if with_new_instr == 0:
            continueRoutine = False
    TextComponent new_instr_txt
      durationEstim = 60
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You just finished a task!

        Next, you will see 3 new options
        The ruls is the same as previous task

        Press <right> to start
  Routine test_choice
    ImageComponent left_option
      image [set every repeat] = $pic_left
      pos = (-0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_option
      image [set every repeat] = $pic_right
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fixation
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent choice
      allowedKeys = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0
      storeCorrect = True
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    PolygonComponent left_gray
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $forced_left*100
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    PolygonComponent right_gray
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $forced_right*100
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    CodeComponent force_wrong_ms
      Code Type = Auto->JS
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      Begin Experiment:
        c_durat = 4
      Begin Routine:
        fc_wrong_ms=''
      Each Frame:
        if t >= c_durat:
            continueRoutine = False
        elif (forced_left and choice.keys=="right") or (forced_right and choice.keys=="left"):
            fc_wrong_ms='Please select the cued option'
        elif (choice.keys=="left") or (choice.keys=="right"):
            continueRoutine = False
    TextComponent fc_wrong
      letterHeight = 0.05
      pos = (0, 0.2)
      text [set every frame] = $fc_wrong_ms
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  Routine choice_fb
    CodeComponent fb_msg
      Code Type = Auto->JS
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      Begin Experiment:
        no_resp = float('nan')
        wr_resp = 999
      Begin Routine:
        if (forced_left and choice.keys=="right") or (forced_right and choice.keys=="left"):
          msg='Wrong choice'
          thisExp.addData('chosen_op',wr_resp)
        elif choice.keys=="left":#stored on last run routine
          msg=reward_stim_1
          thisExp.addData('chosen_op',option_left)
        elif choice.keys=="right":
          msg=reward_stim_2
          thisExp.addData('chosen_op',option_right)
        else:# if no key was pressed
          msg='No response'
          thisExp.addData('chosen_op',no_resp)
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine p1_instr
    TextComponent msg_p1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Free choice practice

        Press <right> and <left> arrow to choose a option.

        Press <right> to continue
    KeyboardComponent resp_p1
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine p1_end
    TextComponent msg2_p1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        If you understood free choice trials
        Press <right> to continue

        If you would like to do the practice again
        Press <space>
    KeyboardComponent resp2_p1
      allowedKeys = 'space','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_p1
      Code Type = Auto->JS
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      Each Frame:
        if resp2_p1.keys == "right":
                p1_repeat.finished = True
  Routine p2_instr
    TextComponent msg_p2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Force choice practice

        In this session, your task is to choose the option
        covered by a grey square

        Press <right> and <left> arrow to choose a option

        Press <right> to continue
    KeyboardComponent resp_p2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine p2_end
    TextComponent msg2_p2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        If you understood free choice trials
        Press <right> to continue

        If you would like to do the practice again
        Press <space>
    KeyboardComponent resp2_p2
      allowedKeys = 'space','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_p2
      Code Type = Auto->JS
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      Each Frame:
        if resp2_p2.keys == "right":
                p2_repeat.finished = True
  Routine p3_instr
    TextComponent msg_p3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Rating practice

        Please rate the value of the following options
        based on your experience in previous practice

        Press <right> and <left> arrow to move the rating bar
        Press <return> to confirm the rating

        Press <right> to continue
    KeyboardComponent resp_p3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine p1_fb
    CodeComponent fb_msg_p1
      Code Type = Auto->JS
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      Begin Routine:
        if free_resp_p1.keys=="left":#stored on last run routine
          msg_p1=p1_reward_1
        elif free_resp_p1.keys=="right":
          msg_p1=p1_reward_2
    TextComponent fb_p1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg_p1
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  Routine p2_fb
    CodeComponent fb_msg_p2
      Code Type = Auto->JS
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      Begin Routine:
        if force_resp_p2.keys=="left":#stored on last run routine
          msg_p2 = p2_reward_1
        elif force_resp_p2.keys=="right":
          msg_p2 = p2_reward_2
        else:# if no key was pressed
          msg_p2 ='No response'
    TextComponent fb_p2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg_p2
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  Routine p4_instr
    TextComponent msg_p4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        A practice session mixing free choice, forced choice, and raings

        It is similar to what you will do in the formal experiment

        Press <right> and <left> arrow to choose a option.

        Press <right> to continue
    KeyboardComponent resp_p4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine p4_end
    TextComponent msg2_p4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        If you understood free choice trials
        Press <right> to continue

        If you would like to do the practice again
        Press <space>
    KeyboardComponent resp2_p4
      allowedKeys = 'space','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_p4
      Code Type = Auto->JS
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      Each Frame:
        if resp2_p4.keys == "right":
                p4_repeat.finished = True
  Routine p3_end
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  Routine p4_choice
    ImageComponent left_option_p4
      image [set every repeat] = $p4_pic_left
      pos = (-0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_option_p4
      image [set every repeat] = $p4_pic_right
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fixation_p4
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent choice_p4
      allowedKeys = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    PolygonComponent left_gray_p4
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $p4_forced_left*100
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    PolygonComponent right_gray_p4
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $p4_forced_right*100
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    CodeComponent wrong_ms_p4
      Code Type = Auto->JS
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      Begin Routine:
        p4_wrong_ms=''
      Each Frame:
        if (p4_forced_left and choice_p4.keys=="right") or (p4_forced_right and choice_p4.keys=="left"):
            p4_wrong_ms='Please select the cued option'
        elif (choice_p4.keys=="left") or (choice_p4.keys=="right"):
            continueRoutine = False
    TextComponent fc_wrong_p4
      letterHeight = 0.05
      pos = (0, 0.2)
      text [set every frame] = $p4_wrong_ms
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  Routine p4_choice_fb
    CodeComponent fb_msg_p4
      Code Type = Auto->JS
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      Begin Routine:
        if choice_p4.keys=="left":#stored on last run routine
          msg_p4 = p4_reward_1
        elif choice_p4.keys=="right":
          msg_p4 = p4_reward_2
    TextComponent fb_p4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg_p4
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  Routine p4_rating
    ImageComponent rating_p4
      durationEstim = 20
      image [set every repeat] = $p4_rating_pic
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_bar_p4
      durationEstim = 20
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=2,
        markerStart=5,
        labels = ('0','50','100'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
    CodeComponent code_rating_p4
      Code Type = Auto->JS
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      Begin Routine:
        # skip it if no rating is needed
        if p4_with_rating == 0:
            continueRoutine = False
    TextComponent reminder_rating_p4
      durationEstim = 15
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5
      text = Please press 'return' key to confirm your choice
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  Routine test_rating
    ImageComponent option_rating1
      durationEstim = 10
      image [set every repeat] = $test_rating_pic
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    RatingScaleComponent rating_bar1
      durationEstim = 10
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=2,
        markerStart=5,
        labels = ('0','50','100'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
    CodeComponent rating_cond1
      Code Type = Auto->JS
      Begin Routine:
        # skip it if no rating is needed
        if with_rating == 0:
            continueRoutine = False
      End Routine:
        if with_rating == 1:
            thisExp.addData('rt_score1',rating_bar1.getRating()*10)
        else:
            thisExp.addData('rt_score1',no_resp)
    TextComponent reminder_rating1
      durationEstim = 6
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      text = Please press 'return' key to confirm your choice
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  Routine p3_rating_2
    ImageComponent pic_p3
      durationEstim = 20
      image [set every repeat] = $p3_pic_rating
      opacity [set every repeat] = 1
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_bar_p3
      durationEstim = 20
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=2,
        markerStart=5,
        labels = ('0','50','100'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
  Routine p1_free_c
    ImageComponent left_option_p1
      image [set every repeat] = $p1_pic_left
      pos = (-0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_option_p1
      image [set every repeat] = $p1_pic_right
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fixation_p1
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent free_resp_p1
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine p2_force_c
    ImageComponent left_option_p2
      image [set every repeat] = $p2_pic_left
      pos = (-0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_option_p2
      image [set every repeat] = $p2_pic_right
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fixation_p2
      image = stimuli/fixation.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent force_resp_p2
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent left_gray_p2
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $p2_forced_left*100
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    PolygonComponent right_gray_p2
      fillColor = $[0.7,0.7,0.7]
      lineColor = $[0.7,0.7,0.7]
      opacity = 0.7
      pos = (0.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $p2_forced_right*100
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    CodeComponent wrong_ms_p2
      Code Type = Auto->JS
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      Begin Routine:
        p2_wrong_ms=''
      Each Frame:
        if (p2_forced_left and force_resp_p2.keys=="right") or (p2_forced_right and force_resp_p2.keys=="left"):
            p2_wrong_ms='Please select the cued option'
        elif (force_resp_p2.keys=="left") or (force_resp_p2.keys=="right"):
            continueRoutine = False
    TextComponent fc_wrong_p2
      letterHeight = 0.05
      pos = (0, 0.2)
      text [set every frame] = $p2_wrong_ms
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  Routine pre_exp_rating
    ImageComponent pic_pre
      durationEstim = 20
      image [set every repeat] = $pre_rating_pic
      opacity [set every repeat] = 1
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_bar_pre
      durationEstim = 20
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=1,
        markerStart=5,
        labels = ('0','10'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
  Routine pre_exp_instr
    TextComponent msg_pre
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        First of all
        You will be shown some stimuli
        Please rate how visually appealing
        these stimuli are

        Press <left> or <right> to move the rating bar
        Press <return> to confirm

        Press <right> to continue
    KeyboardComponent resp_pre
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine post_exp_rating1
    ImageComponent pic_post1
      durationEstim = 20
      image [set every repeat] = $post_rating_pic1
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_bar_post1
      durationEstim = 20
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=1,
        markerStart=5,
        labels = ('0','10'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
  Routine post_exp_instr1
    TextComponent msg_post1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Good Job!

        Next, you need to rate again how visually
        appealing the following stimuli are

        Press <left> or <right> to move the rating bar
        Press <return> to confirm

        Press <right> to continue
    KeyboardComponent resp_post1
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine post_exp_instr2
    TextComponent msg_post2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Next, you need to rate how much you like the
        following stimuli given the experience
        you had in the experiment

        Press <left> or <right> to move the rating bar
        Press <return> to confirm

        Press <right> to continue
    KeyboardComponent resp_post2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine post_exp_rating2
    ImageComponent pic_post2
      durationEstim = 20
      image [set every repeat] = $post_rating_pic2
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_bar_post2
      durationEstim = 20
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      startVal [time (s)] = 0.0
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      customize_everything:
        scale=None,
        low=0,
        high=10,
        precision=1,
        markerStart=5,
        labels = ('0','10'),
        showValue=False,
        showAccept=False,
        acceptPreText='',
        noMouse=True,
        size=1.5,
        minTime=0.1
Flow
  Routine pre_exp_instr
  LoopInitiator pre_loop loopType="TrialHandler"
    conditionsFile = pre_rating_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pre_rating_pic', 'stimuli/s1.png')]),
      OrderedDict([('pre_rating_pic', 'stimuli/s2.png')]),
      OrderedDict([('pre_rating_pic', 'stimuli/s3.png')])]
    Routine pre_exp_rating
  LoopTerminator pre_loop
  Routine p1_instr
  LoopInitiator p1_repeat loopType="TrialHandler"
    conditions = [OrderedDict([('p1_file_name', 'p1_cond.xlsx')])]
    conditionsFile = p1_repeat.xlsx
    loopType = random
    nReps = 5
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    LoopInitiator p1_loop loopType="TrialHandler"
      conditionsFile = $p1_file_name
      loopType = random
      nReps = 1
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      Routine p1_free_c
      Routine p1_fb
    LoopTerminator p1_loop
    Routine p1_end
  LoopTerminator p1_repeat
  Routine p2_instr
  LoopInitiator p2_repeat loopType="TrialHandler"
    conditions = [OrderedDict([('p2_file_name', 'p2_cond.xlsx')])]
    conditionsFile = p2_repeat.xlsx
    loopType = random
    nReps = 20
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    LoopInitiator p2_loop loopType="TrialHandler"
      conditionsFile = $p2_file_name
      loopType = random
      nReps = 1
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      Routine p2_force_c
      Routine p2_fb
    LoopTerminator p2_loop
    Routine p2_end
  LoopTerminator p2_repeat
  Routine p3_instr
  LoopInitiator p3_repeat loopType="TrialHandler"
    conditions = [OrderedDict([('p3_file_name', 'p3_cond.xlsx')])]
    conditionsFile = p3_repeat.xlsx
    loopType = random
    nReps = 100
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    LoopInitiator p3_loop loopType="TrialHandler"
      conditionsFile = $p3_file_name
      loopType = random
      nReps = 1
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      Routine p3_rating_2
    LoopTerminator p3_loop
    Routine p3_end
  LoopTerminator p3_repeat
  Routine p4_instr
  LoopInitiator p4_repeat loopType="TrialHandler"
    conditions = [OrderedDict([('p4_file_name', 'p4_cond.xlsx')])]
    conditionsFile = p4_repeat.xlsx
    loopType = random
    nReps = 100
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    LoopInitiator p4_loop loopType="TrialHandler"
      conditionsFile = $p4_file_name
      loopType = random
      nReps = 1
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      Routine p4_choice
      Routine p4_choice_fb
      LoopInitiator p4_rating_loop loopType="TrialHandler"
        conditionsFile = p4_rating_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('p4_rating_pic', 'stimuli/a1.png')]),
          OrderedDict([('p4_rating_pic', 'stimuli/a2.png')]),
          OrderedDict([('p4_rating_pic', 'stimuli/a3.png')])]
        Routine p4_rating
      LoopTerminator p4_rating_loop
    LoopTerminator p4_loop
    Routine p4_end
  LoopTerminator p4_repeat
  Routine test_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"choice_conditions_3arm_rtblock_single"+task_order+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine break_bt_sess
    Routine new_instr
    Routine test_choice
    Routine choice_fb
    Routine ITI
    LoopInitiator test_rating_loop loopType="TrialHandler"
      conditionsFile = test_rating_file.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('p4_rating_pic', 'stimuli/s1.png')]),
        OrderedDict([('p4_rating_pic', 'stimuli/s2.png')]),
        OrderedDict([('p4_rating_pic', 'stimuli/s3.png')])]
      Routine test_rating
    LoopTerminator test_rating_loop
  LoopTerminator trials
  Routine post_exp_instr1
  LoopInitiator post_rating_loop1 loopType="TrialHandler"
    conditionsFile = post_rating_file1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('post_rating_pic1', 'stimuli/s1.png')]),
      OrderedDict([('post_rating_pic1', 'stimuli/s2.png')]),
      OrderedDict([('post_rating_pic1', 'stimuli/s3.png')]),
      OrderedDict([('post_rating_pic1', 'stimuli/s4.png')]),
      OrderedDict([('post_rating_pic1', 'stimuli/s5.png')]),
      OrderedDict([('post_rating_pic1', 'stimuli/s6.png')])]
    Routine post_exp_rating1
  LoopTerminator post_rating_loop1
  Routine post_exp_instr2
  LoopInitiator post_rating_loop2 loopType="TrialHandler"
    conditionsFile = post_rating_file2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('post_rating_pic2', 'stimuli/s1.png')]),
      OrderedDict([('post_rating_pic2', 'stimuli/s2.png')]),
      OrderedDict([('post_rating_pic2', 'stimuli/s3.png')]),
      OrderedDict([('post_rating_pic2', 'stimuli/s4.png')]),
      OrderedDict([('post_rating_pic2', 'stimuli/s5.png')]),
      OrderedDict([('post_rating_pic2', 'stimuli/s6.png')])]
    Routine post_exp_rating2
  LoopTerminator post_rating_loop2
  Routine end
